PsychoPy2experiment version="2024.2.0"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0', 'session': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = 7TFR-RS
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine language_selection
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    TextComponent session_warning_text
      color = red
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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    PolygonComponent english_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent german_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent german_flag
      durationEstim = 60.0
      flipHoriz = True
      image = stimuli/german_flag.png
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent english_flag
      durationEstim = 60.0
      image = stimuli/english_flag.png
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent german_text
      color = -1.0000, 1.0000, -1.0000
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Drücken Sie die linke (grün) Taste für Deutsch
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    TextComponent english_text
      color = 0.0902, -1.0000, -1.0000
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Press the right (red) button for English
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    KeyboardComponent choice_key
      allowedKeys = response_keys
      durationEstim = 60.0
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        if choice_key.keys in key_left:
            german_polygon.borderColor = [1, 0.2941, -1]
            language = "german"
        elif choice_key.keys in key_right:
            english_polygon.borderColor = [1, 0.2941, -1]
            language = "english"
        else:
            raise Exception(f'unknown button {choice_key.keys}')
    KeyboardComponent scanner
      allowedKeys = 't'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine instructions
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    KeyboardComponent key_resp
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = error
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language=='german':
            if session=='1':
                text_instruction = 'Herzlich willkommen beim Experiment!\n\nDas Experiment beginnt nun mit einer einfachen Aufgabe.'
            elif session=='2':
                text_instruction = 'Jetzt folgt der letzte Teil des Experiments\n\nDieser Teil ist gleich wie der Teil ganz am Anfang.'
            else:
                raise Exception(f'unknown session {session}')
            text_instruction += '\n\nIn diesem Teil messen wir einen sogenannten "resting state", d.h. eine Art "Grundzustand" Ihres Gehirns, wenn sie gerade keine aktive Aufgabe erledigen.'
            text_instruction += '\n\nBitte setzen Sie sich bequem hin und bleiben Sie möglichst still sitzen. Halten Sie die nächsten 5 Minuten Ihre Augen geöffnet und versuchen Sie sich zu entspannen. Lassen Sie Ihre Gedanken frei schweifen, ohne sich auf spezifische Gedanken oder Aufgaben zu konzentrieren. Schauen Sie dabei die ganze Zeit das Fixierkreuz an, welches auf dem nächsten Bildschirm angezeigt werden wird.'
            text_instruction += '\n\nFalls Sie noch Fragen zur Aufgabe haben, lassen Sie es den Experimentleiter bitte jetzt wissen.'
            text_instruction += '\nWenn Sie bereit sind, drücken Sie eine Taste und das Fixierkreuz wird für 5 Minuten erscheinen. '
        elif language=='english':
            if session == '1':
                text_instruction = 'Welcome to the experiment!\n\nThe experiment will now begin with a simple task.'
            elif session == '2':
                text_instruction = 'Now follows the last part of the experiment\n\nThis part is the same as the one at the very beginning.'
            else:
                raise Exception(f'unknown session {session}')
            text_instruction += '\n\nIn this part, we measure a so-called "resting state", i.e., a kind of "baseline state" of your brain when you are not performing an active task.'
            text_instruction += '\n\nPlease sit down comfortably and try to stay as still as possible. Keep your eyes open for the next 5 minutes and try to relax. Let your thoughts wander freely without focusing on specific thoughts or tasks. With your eyes, keep looking on the fixation cross that will appear on the next screen. During the 5 minutes, please keep looking at the fixation cross while it is on the screen.'
            text_instruction += '\n\nIf you have any questions about the task, please let the experimentator know now.'
            text_instruction += '\nIf you are ready, press any key to begin. The fixation cross will then appear for 5 minutes.'

        text_instr.text = text_instruction

        print(f'Participant = {participant_id}, Session = {session}, language = {language}')
    KeyboardComponent scanner_2
      allowedKeys = 't'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine RS
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    TextComponent text
      durationEstim = 300
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rs_length
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        start_time = time.time()
        last_print = time.time()
      Each Frame:
        if (time.time()-last_print)>5:
            last_print = time.time()
            print(f'{int(last_print-start_time)}/{rs_length} seconds elapsed')
    KeyboardComponent scanner_3
      allowedKeys = 't'
      durationEstim = 300
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rs_length
      store = all keys
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  Routine end_screen
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    SoundComponent sound_1
      sound = ./sounds/soundCoin.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_final
      color = black
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = error
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    KeyboardComponent key_resp_2
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_final
      Code Type = Auto->JS
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      Begin Routine:
        if language=='german':
            if session==str(1):
                text_final.text = 'Dieser Experimentteil ist nun vorbei. '
            if session==str(2):
                text_final.text = 'Das Experiment ist nun vorbei, vielen Dank für Ihre Teilnahme! '
            text_final.text += '\n\nBitte melden Sie sich beim Experimentleiter.'
        elif language=='english':
            if session==str(1):
                text_final.text = 'This part of the experiment is now over. '
            if session==str(2):
                text_final.text = 'The experiment is now finished, thanks for participating! '
            text_final.text += '\n\nPlease let the experimentator know that you are done.'
        else:
            print(f'ERROR: session = {session} type(error)={type(error)}, unknown?')
        win.color = "#b0c4de"
        win.flip()
    KeyboardComponent scanner_4
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine settings
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    CodeComponent startup
      Code Type = Py
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      Before Experiment:
        import time
        from psychopy import visual, event, core, gui

        trigger_rs_start = 1
        trigger_rs_end = 2
      Begin Experiment:
        session = expInfo['session']
        participant_id = expInfo['participant']
    CodeComponent parameters
      Code Type = Auto->JS
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      Before Experiment:
        rs_length = 300
        letter_height = 0.07

        key_left = 'g'
        key_right = 'b'

        response_keys = [key_left, key_right]  # left and right key
    CodeComponent setup_fmri
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        from psychopy_mri_emulator import launchScan
        raise Exception
        MR_settings = {
            'TR': 1.25,     # duration (sec) per whole-brain volume
            'volumes': 10000,    # number of whole-brain 3D volumes per scanning run
            'sync': 't', # character to use as the sync timing event; assumed to come at start of a volume
            'skip': 0,       # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
            'sound': False    # in test mode: play a tone as a reminder of scanner noise
            }
        infoDlg = gui.DlgFromDict(MR_settings, title='fMRI parameters', order=['TR', 'volumes'])
        if not infoDlg.OK:
            core.quit()
      Begin Experiment:
        launchScan(win, settings=MR_settings,
                  globalClock=globalClock,
                  simResponses=None,
                  mode='Test', esc_key='escape',
                       instr='select Scan or Test, press enter',
                       wait_msg="waiting for scanner...",
                       wait_timeout=300, log=True)
  Routine wait_for_scanner
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    KeyboardComponent scanner_1
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_2
      letterHeight = 0.01
      startVal [time (s)] = 0.0
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      text:
        Experiment ready.
        Please waiting for first scan...
  Routine setup_fmri
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  Routine buffer
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    KeyboardComponent scanner_5
      allowedKeys = 't'
      durationEstim = 300
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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Flow
  Routine settings
  Routine language_selection
  Routine instructions
  Routine wait_for_scanner
  Routine buffer
  Routine RS
  Routine end_screen
