PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = 7TFR-instructions
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine localizer
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    ImageComponent localizer_img
      durationEstim = 0.5
      image = stimuli/Gesicht.jpg
      size = $image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
      units = height
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    TextComponent localizer_isi
      durationEstim = 2.5
      letterHeight = letter_height
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer
      allowedKeys = response_keys
      durationEstim = 1.5
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_correct
      durationEstim = 0.5
      sound [set every repeat] = sounds/soundCoin.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong
      sound [set every repeat] = sounds/soundError.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    CodeComponent localizer_code
      Code Type = Py
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      Begin Routine:
        df_block = df_localizer[df_localizer['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_localizer]

        localizer_img.image = df_trial.img
        t_isi_localizer = df_trial.isi
        is_distractor = df_trial.distractor

        show_feedback = False
        localizer_img.opacity = 1

        # prevent inactive sound from blocking trial finish
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED

        played = False

        if is_distractor:
            localizer_img.ori  = 180
        else:
            localizer_img.ori  = 0

        msg = f'localizer {i_localizer}/{len(df_block)}'
        msg += f' block {i_block}/{max(df_localizer["block"])} {"[FLIPPED]" if is_distractor else ""} isi={t_isi_localizer}'
        print(msg, flush=True)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer.keys) and not played:
            played = True
            if is_distractor:
                sound_correct.play()
                loc_feedback.foreColor = color_green
                loc_feedback.text = 'Super!'
                localizer_img.opacity = 0.
                show_feedback = True
                reward_count += reward_amount
                print('Correct press')
            else:
                sound_wrong.play()
                loc_feedback.foreColor = color_red
                loc_feedback.text = 'Wrong!' if language=='english' else 'Falsch!'
                show_feedback = True
                localizer_img.opacity = 0.2
                reward_count -= reward_amount
                false_alarms += 1
                print('False alarm')

        if key_resp_localizer.status==FINISHED and not played:
            # play error in case of missed button press
            if is_distractor:
                played = True
                loc_feedback.foreColor = color_red
                loc_feedback.text = 'Miss!' if language=='english' else 'Verpasst!'
                show_feedback = True
                localizer_img.opacity = 0.2
                sound_wrong.play()
                misses += 1
                print('Miss')
                reward_count -= reward_amount

            # no feedback if all was well and no distractor
            elif key_resp_localizer.status==FINISHED and not played:
                loc_feedback.status = FINISHED

        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
      End Routine:
        i_localizer+=1
    TextComponent loc_feedback
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.1
      startEstim = 1.5
      startVal [condition] = $show_feedback
      stopVal [duration (s)] = 1.0
      text = Verpasst!
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  Routine sequence
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    ImageComponent sequence_img_1
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_1
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.1
      startVal [condition] = $sequence_img_1.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_2
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.164
      startVal [condition] = $sequence_isi_1.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_2
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.264
      startVal [condition] = $sequence_img_2.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_3
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.328
      startVal [condition] = $sequence_isi_2.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_3
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.428
      startVal [condition] = $sequence_img_3.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_4
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.492
      startVal [condition] = $sequence_isi_3.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_4
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.592
      startVal [condition] = $sequence_img_4.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_5
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.656
      startVal [condition] = $sequence_isi_4.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_5
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.756
      startVal [condition] = $sequence_img_5.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    CodeComponent sequence_code
      Code Type = Py
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      Begin Routine:
        for img_x in range(5):
            component_seq = locals()[f'sequence_img_{img_x+1}']
            component_seq.image = df_trial[f'img{img_x}']
      End Routine:
        i_sequence += 1
  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_sequence = 0.1
        t_img_localizer = 0.5
        t_isi_localizer = 2.5
        t_buffer = 12

        key_left = 'g'
        key_right = 'b'

        reward_amount = 0.05  # +-5 ct per trial

        n_localizer_trials = 5
        n_sequence_trials = 3

        dot_color = (-0.5, -0.5, -0.5)

        image_size = 0.43
        letter_height=0.08
        reward = 5

        color_green = 'green'
        color_red = 'darkred'
    CodeComponent startup
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        subj_id = 0

        response_keys = [key_left, key_right]

        df_localizer = pd.read_csv(f'./sequences/localizer_{subj_id}.csv')
        df_sequences = pd.read_csv(f'./sequences/sequences_{subj_id}.csv')

        print('DUMMY TRIALS: subj_id is set to 0')

        # set variables we will access later
        i_localizer = 0
        i_sequence = 0
        i_block = 0

        # store reward
        reward_count = 0
        false_alarms = 0
        misses = 0
        wrong_answers = 0

        # set the number of repetitions we have
        n_blocks = 1
        n_localizer_trials = 6
        n_sequence_trials = 3

        with open('reward_in_ct.txt', 'r') as f:
            reward_in_cent = int(f.read().strip())
      Each Frame:
        sound_birds.status=FINISHED
    SoundComponent sound_birds
      sound [set every repeat] = sounds/soundWait.ogg
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  Routine buffer
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    TextComponent buffer_fixation
      color = $dot_color
      durationEstim = 8
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_thisbuffer
      text = •
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    CodeComponent buffer_code
      Code Type = Auto->JS
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      Begin Routine:
        sound_birds.track.start(resume=1)
      Each Frame:
        if buffer_fixation.status==FINISHED:
            sound_birds.track.stop()
  Routine question
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    KeyboardComponent question_key_resp
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent question_text
      letterHeight = letter_height*1.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Did X come before Y?
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    CodeComponent question_code
      Code Type = Py
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      Begin Routine:
        choices = [df_trial.target_idx, df_trial.lure_idx]
        if df_trial.correct_pos=='r':
            choices = choices[::-1]

        question_text.text = f'Position\n\n\n{df_trial.cue}\n\n\n'
        question_text.text += '       ?       '.join([str(c+1) for c in choices])
  Routine cue
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    TextComponent cue_text
      letterHeight = letter_height*1.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy
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    CodeComponent cue_code
      Code Type = Py
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      Begin Routine:
        df_block = df_sequences[df_sequences['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_sequence]

        translation =  {'Haus': 'house',
                        'Gesicht': 'face',
                        'Katze': 'cat',
                        'Schuh': 'shoe',
                        'Stuhl': 'chair'}
        if language=='english':
            cue_text.text = translation[df_trial.cue]
        else:
            cue_text.text = df_trial.cue

        t_isi = df_trial.isi/1000
        t_thisbuffer = t_buffer - (5*0.1 + 5*t_isi)
        msg = f'sequence {i_sequence}/{len(df_block)} '
        msg += f' block {i_block}/{max(df_localizer["block"])}  isi={t_isi} ms, buffer={t_thisbuffer:1f} s'
        msg += f'Expecting choice {df_trial.correct_pos} ({df_trial.target_idx+1})'
        print(msg, flush=True)
  Routine fixation_dot
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    TextComponent localizer_fixation
      color = $dot_color
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = •
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  Routine blank1500
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    TextComponent text
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine feedback
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    TextComponent text_feedback__answer
      letterHeight = letter_height*1.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_feedbackseq
      Code Type = Py
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      Begin Routine:
        # play for wrong/correct button presses
        # mapping from keys to positions

        mapping = {'r': 'r', 'y': 'd', 'b': 'r', 'g': 'l'}
        if question_key_resp.keys and len(question_key_resp.keys):
            key_pos = mapping[question_key_resp.keys[-1]]
            if key_pos==df_trial.correct_pos:
                sound_correct.stop()
                sound_correct.play()
                text_feedback__answer.text = 'Correct!' if language=='english' else 'Richtig!'
                text_feedback__answer.foreColor = color_green
                print('Correct answer')
            else:
                text_feedback__answer.text = 'Wrong!' if language=='english' else 'Falsch!'
                text_feedback__answer.foreColor = color_red
                sound_wrong.stop()
                sound_wrong.play()
                wrong_answers += 1
                print('Wrong answer')
        else:
            # play error in case of missed button press
            text_feedback__answer.text = 'Faster!!' if language=='english' else 'Schneller!'
            text_feedback__answer.foreColor = color_red
            sound_wrong.stop()
            sound_wrong.play()
            misses += 1
            print('Miss')

            reward_count -= reward_amount
  Routine instruct_task1
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    ImageComponent image_6
      image = stimuli/Stuhl.jpg
      ori = 180
      pos = (0, 0.1)
      size = 0.25
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der ersten Aufgabe sollen sie immer eine Taste drücken, wenn ein Bild falsch herum (auf den Kopf gedreht) gezeigt wird. Beispiel:







        Bitte antworten Sie jeweils so schnell und genau wie möglich. Wenn das Bild richtig herum ist, drücken Sie keine Taste. Sie haben bei jedem Bild 1,5 Sekunden Zeit zu antworten.

        Drücken Sie eine Taste um fortzufahren.
    CodeComponent code_instruct1
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_2.text = """In the first task, you should always press a button when a picture is shown the wrong way round (upside down). Example:








        Please answer as quickly and accurately as possible. If the picture is the correct way up, don't press a button. You have 1.5 seconds to answer each picture.

        Press any button to continue."""
  Routine instruct_welcome
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    KeyboardComponent key_resp
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = stimuli/Gesicht.jpg
      pos = (2, 2)
      size = 0.25
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = stimuli/Haus.jpg
      pos = (2, 0)
      size = 0.25
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = stimuli/Katze.jpg
      size = 0.25
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = stimuli/Schuh.jpg
      pos = (0, 0.2)
      size = 0.25
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = stimuli/Stuhl.jpg
      pos = (0, 0.2)
      size = 0.25
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_3
      alignment = top-center
      bold = False
      borderWidth = 0
      editable = False
      letterHeight = letter_height
      pos = (0,0.50)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zur Studie  <b>“Visuelle Objekte Erkennen”</b>

        Das Experiment “Visuelle Objekte Erkennen” besteht aus zwei Aufgaben bei denen wir Ihnen Bilder von alltäglichen Objekten zeigen. Dabei sollen Sie sich immer jedes Bild genau anschauen. Während des Experiments werden Sie abwechselnd zwei verschiedene Aufgaben bearbeiten, die wir Ihnen im Folgenden genau erklären.

        Drücken Sie eine Taste um fortzufahren.
    CodeComponent code
      Code Type = Py
      Begin Routine:
        for i, img in enumerate([image, image_2, image_3, image_4, image_5]):
            img.pos = [(i-2)/3, -0.5]
            #img.size = 0.2

        if language=='english':
            print('selected english')
            textbox_3.setText("""\n\nWelcome to the study <b>“Recognizing Visual Objects”</b>

        The experiment “Recognizing Visual Objects” consists of two tasks in which we show you pictures of everyday objects. You should always look closely at each picture. During the experiment, you will alternate between two different tasks, which we will now explain in detail.

        Press any button to continue.""")
            textbox_3.draw()
  Routine instruct_task1_2
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    KeyboardComponent key_resp_2
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Immer wenn Sie eine richtige Antwort gegeben haben, sehen Sie ein visuelles Feedback.

        Sie sollen nicht reagieren, wenn ein Bild richtig herum gezeigt wird.

        Für jedes umgedrehte Bild, das Sie richtig erkannt haben, erhalten Sie eine Belohnung von 3 Cent. Wenn Sie eine falsche Antwort geben (also eine Taste drücken, obwohl das Bild richtig herum dargestellt wurde), werden Ihnen 3 Cent abgezogen.

        Sie sehen nun eine Übung der Aufgabe.
        Drücken Sie eine Taste um fortzufahren.
    CodeComponent code_instruct2
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_4.text = f"""Whenever you have given a correct answer, you will briefly see a visual feedback of your answer.

        You should not react when a picture is shown the right way round.

        You will receive a reward of {reward_in_cent} cents for each upside-down picture that you have correctly recognized. If you give an incorrect answer (i.e. press a button even though the picture was shown the right way round), you will be deducted {reward_in_cent} cents.
        This way you will be able to earn an extra 5€ as bonus.

        You will now see an exercise of the task.
        Press any button to continue."""

        elif language=='german':
            text_4.text = f"""Immer wenn Sie eine richtige Antwort gegeben haben, sehen Sie ein visuelles Feedback.

        Sie sollen nicht reagieren, wenn ein Bild richtig herum gezeigt wird.

        Für jedes umgedrehte Bild, das Sie richtig erkannt haben, erhalten Sie eine Belohnung von {reward_in_cent} Cent. Wenn Sie eine falsche Antwort geben (also eine Taste drücken, obwohl das Bild richtig herum dargestellt wurde), werden Ihnen {reward_in_cent} Cent abgezogen.
        Insgesamt können Sie so bis zu 5€ an Bonus erspielen.

        Sie sehen nun eine Übung der Aufgabe.
        Drücken Sie eine Taste um fortzufahren."""
  Routine localizer_feedback
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    KeyboardComponent key_resp_4
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = ... dummy ... something went wrong
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            if language=='german':
                feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
                feedback_string += 'Es geht nun weiter mit einer Übung der zweiten Aufgabe.\n\n'
                feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            elif language=='english':
                feedback_string = 'Congratulations, you did everything correctly!\n\n'
                feedback_string += 'Now we continue with the second task.\n\n'
                feedback_string += 'Please press any button to continue.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                if language=='german':
                    feedback_string += f'Sie haben {misses}x verpasst eine Taste bei einem auf dem Kopf stehenden Bild zu drücken.\n'
                elif language=='english':
                    feedback_string += f'You missed {misses}x to press a button when the picture was upside down.\n'

            if false_alarms:
                if language=='german':
                    feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
                elif language=='english':
                    feedback_string += f'You have pressed at the wrong time {false_alarms}x.\n'
            if language=='german':

                feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
                feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
                feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            elif language=='english':
                feedback_string += '\nPlease only press a button when a picture is upside-down. '
                feedback_string += 'If you have any questions, please ask the experimentator now.\n'
                feedback_string += '\nPlease press any button to repeat the task.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
  Routine instruct_exp2
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    TextComponent text_3
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der zweiten Aufgabe wird Ihnen erst ein Wort gezeigt, das eines der fünf Bilder beschreibt.

        Kurz danach werden ihnen alle fünf Bilder in sehr schneller, zufälliger Reihenfolge abgespielt. Ihre Aufgabe ist es, sich zu merken an welcher Stelle der Gegenstand des vorher gezeigten Wortes ist.
        Die Geschwindigkeit mit der die Bilder gezeigt werden, ist in jedem Durchgang unterschiedlich und wird in einigen Fällen sehr schnell sein.

        Deshalb ist es wichtig, dass Sie sich die Abfolge der Bilder aufmerksamm anschauen und sich die Position merken, an der das vorgegebene Objekt das erste Mal erschienen ist.

        Bitte drücken Sie eine Taste um Fortzufahren.
    KeyboardComponent key_resp_5
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_instruct3
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_3.text = """

        In the second task, you are first shown a word that describes one of the five pictures.

        Shortly afterwards, all five pictures are played back to you in a very fast, random order. Your task is to remember at which position the object of the previously shown word is.
        The speed at which the pictures are shown is different in each round and will be very fast in some cases.

        It is therefore important that you watch the sequence of pictures carefully and remember the position at which the given object first appeared.

        Please press any button to continue."""
  Routine sequence_feedback
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    KeyboardComponent key_resp_6
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_seq
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = dummy... something went wrong
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    CodeComponent code_seqfeedback
      Code Type = Py
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      Begin Routine:
        if wrong_answers==0 and misses==0:
            sequence_repetition.finished=True
            if language=='german':
                feedback_string = 'Sie haben bei allen drei Sequenzen die richtige Position bestimmt. Gratulation! Die Übung war in etwa 10% der Länge des Hauptexperiments, also würden Sie 30 ct extra Bonus erhalten.\n\n'
                feedback_string += 'Die Übung ist nun beendet. Bitte melden Sie sich beim Experimentleiter.\n\n'
                feedback_string += 'Falls Sie noch Fragen haben, stellen Sie diese gerne.'
            elif language=='english':
                feedback_string = 'You have detected the right order in all three examples. Congratulation! This exercise was around 10% of the length of the main experiment. Therefore you would have gained 30 ct Bonus\n\n'
                feedback_string += 'The exercise is now complete. Please let the experimentator know you are finished.\n\n'
                feedback_string += 'If you have any remaining questions, please let us know.'

            text_feedback_seq.text = feedback_string

        else:
            feedback_string = ''
            if wrong_answers:
                if language=='german':
                    feedback_string += f'Sie haben {wrong_answers}x falsch geantwortet. '
                elif language=='english':
                    feedback_string += f'You gave a wrong answere {wrong_answers} time(s). '

            if misses:
                if language=='german':
                    feedback_string += f'Sie haben {misses}x verpasst zu antworten. Bitte antworten Sie schnell genug! '
                elif language=='english':
                    feedback_string += f'You have missed to answer {misses} time(s). Please always respond fast enough! '
            if language=='german':
                feedback_string += '\n\nFalls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
                feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            elif language=='english':
                feedback_string += '\nIf you have any questions, please ask the experimentator now.\n'
                feedback_string += '\nPlease press any button to repeat the task.'
            text_feedback_seq.text = feedback_string

            # reset counters
            wrong_answers = 0
            misses = 0
            i_sequence = 0
  Routine instructexp2_dot
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    TextComponent text_6
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Für jede richtige Antwort erhalten sie erneut 3ct Belohnung.

        Zwischen den Bildern wird, wie in der vorherigen Aufgabe, ein Punkt auf dem Bildschirm erscheinen ( • ). Bitte schauen Sie wenn möglich immer den Punkt an, wenn dieser auf dem Bildschirm erscheint.

        Bitte drücken Sie eine Taste um mit einer Übung zu starten.
    KeyboardComponent key_resp_7
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_instruct4
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_6.text = """For each correct answer you will receive a reward of {reward_in_cent} ct. If you respond with a wrong answer, you will not lose any gained reward.

        Between the pictures, as in the previous task, a dot will appear on the screen ( • ). If possible, please always look at the dot when it appears on the screen.

        When the question appears, there will be two selections next to each other.
        Use the right and left button to select either answer.

        Please press a button to start the task."""

        elif language=='german':
            text_6.text = f"""
        Für jede richtige Antwort erhalten sie erneut {reward_in_cent} ct Belohnung. In dieser Aufgabe wird Ihnen jedoch kein Geld abgezogen wenn Sie falsch antworten.

        Zwischen den Bildern wird, wie in der vorherigen Aufgabe, ein Punkt auf dem Bildschirm erscheinen ( • ). Bitte schauen Sie wenn möglich immer den Punkt an, wenn dieser auf dem Bildschirm erscheint.

        Bitte drücken Sie eine Taste um mit einer Übung zu starten.

        """
  Routine instruct_end
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    TextComponent text_5
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Die Übung ist nun beendet.

        Bitte melden Sie sich beim Experimentleider um mit dem eigentlichen Experiment zu beginnen.

        -------------------------

        The experiment has ended. Please let the experimentator know that you are finished, so that you can start the main experiment.
  Routine language_selection_screen
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    PolygonComponent english_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent german_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent german_flag
      durationEstim = 60.0
      flipHoriz = True
      image = stimuli/german_flag.png
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent english_flag
      durationEstim = 60.0
      image = stimuli/english_flag.png
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent german_text
      color = -1.0000, -0.2157, -1.0000
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Drücken Sie die linke (grün) Taste für Deutsch
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    TextComponent english_text
      color = -1.0000, -1.0000, 0.0902
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Press the right (blue) button for English
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    KeyboardComponent choice_key
      allowedKeys = response_keys
      durationEstim = 60.0
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        if choice_key.keys in key_left:
            german_polygon.borderColor = [1, 0.2941, -1]
            language = "german"
        elif choice_key.keys in key_right:
            english_polygon.borderColor = [1, 0.2941, -1]
            language = "english"
Flow
  Routine startup_code
  Routine language_selection_screen
  Routine instruct_welcome
  Routine instruct_task1
  Routine instruct_task1_2
  LoopInitiator localizer_repetition loopType="TrialHandler"
    loopType = random
    nReps = 99
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    LoopInitiator localizer_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials
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      Routine fixation_dot
      Routine localizer
    LoopTerminator localizer_trials
    Routine localizer_feedback
  LoopTerminator localizer_repetition
  Routine instruct_exp2
  Routine instructexp2_dot
  LoopInitiator sequence_repetition loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    LoopInitiator sequence_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_sequence_trials
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      Routine cue
      Routine blank1500
      Routine fixation_dot
      Routine sequence
      Routine buffer
      Routine question
      Routine feedback
      Routine blank1500
    LoopTerminator sequence_trials
    Routine sequence_feedback
  LoopTerminator sequence_repetition
  Routine instruct_end
