PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = 7TFR-main
  keyboardBackend = ioHub
  runMode = 0
  rush = True
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Routines
  Routine localizer
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    ImageComponent localizer_img
      durationEstim = 0.5
      image = stimuli/Gesicht.jpg
      size = $image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
      units = height
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    TextComponent localizer_isi
      durationEstim = 2.5
      letterHeight = letter_height
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer
      allowedKeys = response_keys
      durationEstim = 1.5
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_correct
      durationEstim = 0.5
      sound = sounds/soundCoin.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong
      sound = sounds/soundError.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    CodeComponent localizer_code
      Code Type = Py
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      Begin Routine:
        df_block = df_localizer[df_localizer['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_localizer]

        localizer_img.image = df_trial.img
        t_isi_localizer = df_trial.isi
        is_distractor = df_trial.distractor

        show_feedback = False
        localizer_img.opacity = 1

        # prevent inactive sound from blocking trial finish
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED

        played = False

        if is_distractor:
            localizer_img.ori  = 180
        else:
            localizer_img.ori  = 0

        msg = f'localizer {i_localizer+1}/{len(df_block)}'
        msg += f' block {i_block+1}/{max(df_localizer["block"])+1} {"[FLIPPED]" if is_distractor else ""} isi={t_isi_localizer:.2f}s'
        print(msg, flush=True)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer.keys) and not played:
            played = True
            if is_distractor:
                sound_correct.play()
                loc_feedback.foreColor = color_green
                loc_feedback.text = 'Super!'
                localizer_img.opacity = 0
                show_feedback = True
                reward_count += reward_in_ct
                reward_max += reward_in_ct
                print('Correct press', flush=True)
            else:
                sound_wrong.play()
                loc_feedback.foreColor = color_red
                loc_feedback.text = 'Wrong!' if language=='english' else 'Falsch!'
                show_feedback = True
                localizer_img.opacity = 0
                reward_count -= reward_in_ct
                false_alarms += 1
                print('False alarm', flush=True)

        # play error in case of missed button press
        if key_resp_localizer.status==FINISHED and not played:
            if is_distractor:
                played = True
                loc_feedback.foreColor = color_red
                loc_feedback.text = 'Miss!' if language=='english' else 'Verpasst!'
                show_feedback = True
                localizer_img.opacity = 0
                sound_wrong.play()
                misses += 1
                print('Miss', flush=True)
                reward_count -= reward_in_ct
            else:
                loc_feedback.status = FINISHED

        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
      End Routine:
        i_localizer+=1
    KeyboardComponent scanner_6
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $localizer_isi.status==FINISHED
      store = all keys
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    TextComponent loc_feedback
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.1
      startEstim = 1.5
      startVal [condition] = $show_feedback
      stopVal [duration (s)] = 1.0
      text = Verpasst!
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  Routine sequence
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    ImageComponent sequence_img_1
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_1
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.1
      startVal [condition] = $sequence_img_1.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_2
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.164
      startVal [condition] = $sequence_isi_1.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_2
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.264
      startVal [condition] = $sequence_img_2.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_3
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.328
      startVal [condition] = $sequence_isi_2.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_3
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.428
      startVal [condition] = $sequence_img_3.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_4
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.492
      startVal [condition] = $sequence_isi_3.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_4
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.592
      startVal [condition] = $sequence_img_4.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_5
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.656
      startVal [condition] = $sequence_isi_4.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_5
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.756
      startVal [condition] = $sequence_img_5.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    CodeComponent sequence_code
      Code Type = Py
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      Begin Routine:
        for img_x in range(5):
            component_img = locals()[f'sequence_img_{img_x+1}']
            component_img.image = df_trial[f'img{img_x}']

        img_started = [0, 0, 0, 0, 0]
      Each Frame:
        for img_x, state in enumerate(img_started):
            if state: continue
            component_img = locals()[f'sequence_img_{img_x+1}']
            if component_img.status==STARTED:
                img_started[img_x] = 1
                img_id = trigger_img[get_image_name(component_img.image)]
      End Routine:
        i_sequence += 1
    KeyboardComponent scanner_10
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $sequence_isi_5.status==FINISHED
      store = all keys
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  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_sequence = 0.1
        t_img_localizer = 0.5
        t_isi_localizer = 2.5
        t_buffer = 12
        image_size = 0.43

        color_green = 'green'
        color_red = 'darkred'

        key_left = 'g'
        key_right = 'b'
        response_keys = [key_left, key_right]

        letter_height=0.08

        n_localizer_trials = 5
        n_sequence_trials = 3

        dot_color = (-0.5, -0.5, -0.5)

        trigger_img = {}
        trigger_img['Gesicht'] = 1
        trigger_img['Haus']   = 2
        trigger_img['Katze']   = 3
        trigger_img['Schuh']   = 4
        trigger_img['Stuhl']   = 5

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_buf_start = 61
        trigger_buf_stop = 62
        trigger_sequence_sound0 = 70
        trigger_sequence_sound1 = 71
        trigger_localizer_sound0 = 30
        trigger_localizer_sound1 = 31
        trigger_fixation_pre1 = 81
        trigger_fixation_pre2 = 82

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_localizer = 0
        trigger_base_val_localizer_distractor = 100
        trigger_base_val_cue = 10
        trigger_base_val_sequence = 20
    CodeComponent startup
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        subj_id = expInfo['participant']

        df_localizer = pd.read_csv(f'./sequences/localizer_{subj_id}.csv')
        df_sequences = pd.read_csv(f'./sequences/sequences_{subj_id}.csv')

        # set variables we will access later
        i_localizer = 0
        i_sequence = 0
        i_block = 0

        # store reward
        reward_max = 0
        reward_count = 0
        false_alarms = 0
        misses = 0
        wrong_answers = 0

        # set the number of repetitions we have
        n_blocks = max(df_localizer.block)+1
        n_localizer_trials = max(df_localizer.trial)+1
        n_sequence_trials = max(df_sequences.trial)+1

        if PILOTING:
            n_blocks = 1
            n_localizer_trials = 5
            n_sequence_trials = 3

        with open('./reward_in_ct.txt', 'r') as f:
            reward_in_ct = int(f.read().strip())
      Each Frame:
        sound_birds.status=FINISHED
    CodeComponent functions
      Code Type = Auto->JS
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      Before Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]
    SoundComponent sound_birds
      durationEstim = 8
      sound = sounds/soundWait.ogg
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  Routine buffer
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    TextComponent buffer_fixation
      color = $dot_color
      durationEstim = 8
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_thisbuffer
      text = •
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    CodeComponent buffer_code
      Code Type = Auto->JS
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      Begin Routine:
        sound_birds.track.start(resume=1)
      Each Frame:
        if buffer_fixation.status==FINISHED:
            sound_birds.track.stop()
    KeyboardComponent scanner_11
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $buffer_fixation.status==FINISHED
      store = all keys
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  Routine question
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    KeyboardComponent question_key_resp
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent question_text
      letterHeight = letter_height*1.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Did X come before Y?
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    CodeComponent question_code
      Code Type = Py
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      Begin Routine:
        choices = [df_trial.target_idx, df_trial.lure_idx]
        if df_trial.correct_pos=='r':
            choices = choices[::-1]


        question_text.text = f'Position\n\n{cue_text.text}\n\n'
        question_text.text += '       ?       '.join([str(c+1) for c in choices])
    KeyboardComponent scanner_12
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $question_text.status==FINISHED
      store = all keys
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  Routine cue
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    TextComponent cue_text
      letterHeight = letter_height*1.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy
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    CodeComponent cue_code
      Code Type = Py
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      Begin Routine:
        df_block = df_sequences[df_sequences['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_sequence]

        translation =  {'Haus': 'house',
                        'Gesicht': 'face',
                        'Katze': 'cat',
                        'Schuh': 'shoe',
                        'Stuhl': 'chair'}
        if language=='english':
            cue_text.text = translation[df_trial.cue]
        else:
            cue_text.text = df_trial.cue

        t_isi = df_trial.isi/1000
        t_thisbuffer = t_buffer - (5*0.1 + 5*t_isi)
        msg = f'sequence {i_sequence+1}/{len(df_block)} '
        msg += f' block {i_block+1}/{max(df_localizer["block"])+1}  isi={t_isi} ms, buffer={t_thisbuffer:1f} s'
        msg += f'Expecting choice {df_trial.correct_pos} ({df_trial.target_idx+1})'
        print(msg, flush=True)
      Each Frame:
        if frameN == 0:
            img_idx = trigger_img[df_trial.cue]
    KeyboardComponent scanner_8
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $cue_text.status==FINISHED
      store = all keys
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  Routine fixation_dot
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    TextComponent localizer_fixation
      color = $dot_color
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = •
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    KeyboardComponent scanner_5
      allowedKeys = 't'
      durationEstim = 0.3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $localizer_fixation.status==FINISHED
      store = all keys
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  Routine blank1500
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    TextComponent text
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent scanner_9
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $text.status==FINISHED
      store = all keys
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  Routine feedback
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    TextComponent text_feedback__answer
      letterHeight = letter_height*1.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_feedbackseq
      Code Type = Py
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      Begin Routine:
        # play for wrong/correct button presses
        # mapping from keys to positions

        mapping = {'r': 'r', 'y': 'd', 'b': 'r', 'g': 'l'}
        if question_key_resp.keys and len(question_key_resp.keys):
            key_pos = mapping[question_key_resp.keys[-1]]
            if key_pos==df_trial.correct_pos:
                sound_correct.stop()
                sound_correct.play()
                reward_count += reward_in_ct
                reward_max += reward_in_ct
                text_feedback__answer.text = 'Correct!' if language=='english' else 'Richtig!'
                text_feedback__answer.foreColor = color_green
                print('Correct answer', flush=True)
            else:
                text_feedback__answer.text = 'Wrong!' if language=='english' else 'Falsch!'
                text_feedback__answer.foreColor = color_red
                sound_wrong.stop()
                sound_wrong.play()
                wrong_answers += 1
                print('Wrong answer', flush=True)
        else:
            # play error in case of missed button press
            text_feedback__answer.text = 'Faster!' if language=='english' else 'Schneller!'
            text_feedback__answer.foreColor = color_red
            sound_wrong.stop()
            sound_wrong.play()
            misses += 1
            print('Miss', flush=True)
            #reward_count -= reward_in_ct

        # set the break conditional to true to display a break
        break_conditional_nReps = i_block%2 if abs(n_blocks-i_block)>=2 else 0
    KeyboardComponent scanner_13
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_feedback__answer.status==FINISHED
      store = all keys
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  Routine instruct_welcome
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    KeyboardComponent key_resp
      allowedKeys = 'r','g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = stimuli/Gesicht.jpg
      pos = (2, 2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = stimuli/Haus.jpg
      pos = (2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = stimuli/Katze.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = stimuli/Schuh.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = stimuli/Stuhl.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        for i, img in enumerate([image, image_2, image_3, image_4, image_5]):
            img.pos = [(i-2)/4, -0.35]
            img.size = 0.18
    TextboxComponent textbox_3
      alignment = top-center
      bold = False
      borderWidth = 0
      editable = False
      letterHeight = letter_height
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zur Studie
        <b>“Visuelle Objekte Erkennen”</b>

        Das Experiment “Visuelle Objekte Erkennen” besteht aus zwei Aufgaben bei denen wir Ihnen Bilder von alltäglichen Objekten zeigen. Dabei sollen Sie sich immer jedes Bild genau anschauen. Während des Experiments werden Sie abwechselnd zwei verschiedene Aufgaben bearbeiten, die wir Ihnen im Folgenden genau erklären.

        Drücken Sie eine Taste um fortzufahren.
  Routine localizer_feedback
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    KeyboardComponent key_resp_4
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ... dummy ... something went wrong
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit einer Übung der zweiten Aufgabe.\n\n'
            feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Sie haben {misses}x verpasst eine Taste bei einem auf dem Kopf stehenden Bild zu drücken.\n'
            if false_alarms:
                feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
  Routine instruct_exp2
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    TextComponent text_3
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der zweiten Aufgabe wir Ihnen erst ein Wort gezeigt, das eines der fünf Bilder beschreibt.

        Kurz danach werden ihnen alle fünf Bilder in sehr schneller, zufälliger Reihenfolge abgespielt. Ihre Aufgabe ist es, sich zu merken an welcher Stelle der Gegenstand des vorher gezeigten Wortes ist.
        Die Geschwindigkeit mit der die Bilder gezeigt werden, ist in jedem Durchgang unterschiedlich und wird in einigen Fällen sehr schnell sein.

        Deshalb ist es wichtig, dass Sie sich die Abfolge der Bilder aufmerksamm anschauen und sich die Position merken, an der das vorgegebene Objekt das erste Mal erschienen ist.

        Bitte drücken Sie eine Taste um Fortzufahren.
    KeyboardComponent key_resp_5
      allowedKeys = 'r', 'g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sequence_feedback
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    KeyboardComponent key_resp_6
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_seq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy... something went wrong
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    CodeComponent code_seqfeedback
      Code Type = Py
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      Begin Routine:
        if wrong_answers==0 and misses==0:
            sequence_repetition.finished=True
            feedback_string = 'Sie haben bei allen drei Sequenzen die richtige Position bestimmt. Gratulation!\n\n'
            feedback_string += 'Die Übung ist nun beendet. Bitte melden Sie sich beim Experimentleiter.\n\n'
            feedback_string += 'Falls Sie noch Fragen haben, stellen Sie diese gerne.'
            text_feedback_seq.text = feedback_string

        else:
            feedback_string = ''
            if wrong_answers:
                feedback_string += f'Sie haben {wrong_answers}x falsch geantwortet. '
            if misses:
                feedback_string += f'Sie haben {misses}x verpasst zu antworten. Bitte antworten Sie schnell genug! '
            feedback_string += '\n\nFalls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback_seq.text = feedback_string

            # reset counters
            wrong_answers = 0
            misses = 0
            i_sequence = 0
  Routine instruct_end
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    TextComponent text_5
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Die Übung ist nun beendet.
        Sie haben BONUS erspielt!

        Bitte melden Sie sich beim Experimentleiter.

        --------------------

        The experiment has ended.
        You have gained BONUS!

        Please let the experimentator know that you are finished.
    CodeComponent code_final
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('total reward gained', reward_count)
        text_5.text = text_5.text.replace('BONUS', f'{reward_count} ct')
        print(f'Participant gained an extra {reward_count} ct of maximum {reward_max} ct')
    KeyboardComponent scanner_15
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_5.status==FINISHED
      store = all keys
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  Routine instruct_pre1
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    KeyboardComponent key_resp_3
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = error
      wrapWidth = 1.2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_2.text = f"""Welcome to the main part of the experiment.

        In the following, the two tasks from the exercise will always alternate, i.e. task 1 will appear first for a few minutes, then task 2 for a few minutes. This sequence will be repeated {n_blocks} times. There will be a short breather every few blocks.

        The change of task will always be announced.

        Press any button to continue."""

        elif language=='german':
            text_2.text = f"""
        Willkommen beim Hauptteil des Experiments.

        Im Folgenden werden sich die beiden Aufgaben aus der Übung immer abwechseln, d.h. erst wird ein paar Minuten lang Aufgabe 1 erscheinen, dann ein paar Minuten Aufgabe 2. Diese Abfolge wird {n_blocks}x wiederholt. Alle paar Blöcke wird es eine kurze Verschnaufpause geben.

        Es wird immer kurz angekündigt, wenn ein Wechsel der Aufgabe kommt.

        Drücken Sie eine Taste um fortzufahren."""
  Routine instruct_pre2
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    KeyboardComponent key_resp_2
      allowedKeys = response_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Für eine gute Datenqualität ist es wichtig, dass sie während des Experimentes so ruhig wie möglich sitzen bleiben. Versuchen Sie insbesondere Kopfbewegungen zu minimieren und wenn möglich mit Bewegungen bis zu den Pausen zu warten.

        Zur Erinnerung: Für jede richtige Antwort erhalten Sie eine Belohnung von X Cent. Wenn Sie eine falsche Antwort geben werden Ihnen X Cent abgezogen. Bitte versuchen Sie so schnell wie möglich zu antworten.

        Drücken Sie eine Taste um mit dem Experiment und Aufgabe 1 zu starten.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_4.text=f"""To ensure good data quality, it is important that you remain as still as possible during the experiment. In particular, try to minimize head movements and, if possible, wait until the breaks before making any movements.

        Reminder: You will receive a reward of {reward_in_ct} cents for every correct answer. If you give an incorrect answer, {reward_in_ct} cents will be deducted. Please try to answer as quickly as possible.

        Press any button to start the experiment and task 1."""

        elif language=='german':
            text_4.text = f"""Für eine gute Datenqualität ist es wichtig, dass sie während des Experimentes so ruhig wie möglich sitzen bleiben. Versuchen Sie insbesondere Kopfbewegungen zu minimieren und wenn möglich mit Bewegungen bis zu den Pausen zu warten.

        Zur Erinnerung: Für jede richtige Antwort erhalten Sie eine Belohnung von {reward_in_ct} Cent. Wenn Sie eine falsche Antwort geben werden Ihnen {reward_in_ct} Cent abgezogen. Bitte versuchen Sie so schnell wie möglich zu antworten.

        Drücken Sie eine Taste um mit dem Experiment und Aufgabe 1 zu starten."""
  Routine instruct_pre3
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    TextComponent text_7
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = es geht gleich los...
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_7.text = 'the experiment is starting...'
    KeyboardComponent scanner_3
      allowedKeys = 't'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_7.status==FINISHED
      store = all keys
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  Routine break_2
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    TextComponent text_8
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        <Kurze Pause>

        Bitte nehmen Sie eine kurze Verschnaufpause.

        Drücken Sie eine beliebige Taste, wenn Sie mit dem nächsten Block fortfahren wollen.
    KeyboardComponent key_resp_7
      allowedKeys = ['enter', 'return', 'num_enter', 'x']
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        print('Break started. Please stop the scanner sequence and press ENTER before next sequence is started.', flush=True)
        if language=='english':
            text_8.text = f"""<short break>

        Please take a short breather.

        So far you have gained {reward_count} ct bonus.

        Please wait for the experimenter to start block number {i_block+2}."""

        if language=='german':
            text_8.text = f"""
        <Kurze Pause>

        Bitte nehmen Sie eine kurze Verschnaufpause.

        Bisher haben Sie {reward_count} ct Bonus erspielt.

        Bitte warten Sie, bis der Experimentleiter Block Nummer {i_block+2} startet."""
      End Routine:
        print('break ended')
    KeyboardComponent scanner_14
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine fixation_dot_pre1
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    TextComponent text_6
      letterHeight = letter_height*1.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Aufgabe: Auf-dem-Kopf-Bilder erkennen.
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    CodeComponent code_dot1
      Code Type = Auto->JS
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      Begin Routine:
        i_localizer=0
        i_sequence=0
        i_block=blocks.thisN
    KeyboardComponent scanner_4
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.85
      store = all keys
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  Routine fixation_dot_pre2
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    TextComponent text_9
      letterHeight = letter_height*1.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Aufgabe: Position merken
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    CodeComponent code_dot2
      Code Type = Auto->JS
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      Begin Experiment:
        i_localizer=0
        i_sequence=0
    KeyboardComponent scanner_7
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = 3.85
      store = all keys
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  Routine lang_select
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  Routine language_selection_screen
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    PolygonComponent english_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent german_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent german_flag
      durationEstim = 60.0
      flipHoriz = True
      image = stimuli/german_flag.png
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent english_flag
      durationEstim = 60.0
      image = stimuli/english_flag.png
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent german_text
      color = -1.0000, -0.2157, -1.0000
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Drücken Sie die linke (grün) Taste für Deutsch
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    TextComponent english_text
      color = -1.0000, -1.0000, 0.0902
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Press the right (blue) button for English
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    KeyboardComponent choice_key
      allowedKeys = response_keys
      durationEstim = 60.0
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        if choice_key.keys in key_left:
            german_polygon.borderColor = [1, 0.2941, -1]
            language = "german"
        elif choice_key.keys in key_right:
            english_polygon.borderColor = [1, 0.2941, -1]
            language = "english"
  Routine wait_for_scanner
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    KeyboardComponent scanner_1
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_10
      letterHeight = letter_height*1.5
      startVal [time (s)] = 0.0
      text = Noch einen kurzen Moment...
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_10.text = 'The experiment will start soon...'
  Routine buffer_2
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    TextComponent text_11
      letterHeight = letter_height*1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    KeyboardComponent scanner_16
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine wait_for_experimenter
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    KeyboardComponent scanner
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_12
      letterHeight = letter_height*1.5
      startVal [time (s)] = 0.0
      text = Das Experiment startet gleich...
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_10.text = 'Waiting for experimenter...'
Flow
  Routine startup_code
  Routine language_selection_screen
  Routine instruct_pre1
  Routine instruct_pre2
  Routine wait_for_scanner
  Routine buffer_2
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = n_blocks
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    Routine fixation_dot_pre1
    LoopInitiator localizer_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials
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      Routine fixation_dot
      Routine localizer
    LoopTerminator localizer_trials
    Routine fixation_dot_pre2
    LoopInitiator sequence_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_sequence_trials
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      Routine cue
      Routine blank1500
      Routine fixation_dot
      Routine sequence
      Routine buffer
      Routine question
      Routine feedback
      Routine blank1500
    LoopTerminator sequence_trials
    LoopInitiator break_conditional loopType="TrialHandler"
      loopType = random
      nReps = break_conditional_nReps
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      Routine break_2
      Routine wait_for_scanner
      Routine buffer_2
    LoopTerminator break_conditional
  LoopTerminator blocks
  Routine instruct_end
